CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:36
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['CellP-2D_PART-1of3_v1_03202022—————This pipeline is Only for 2D-Analysis with Nuclei Staining', '', '<Upload file in TIFF-single zstack or czi  format (ok time lapses, however it will only be considered the first frame) ']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['This module allows you to extract information describing your images (i.e, metadata), like the name of sample, biological replicate, or plates. The metadata will be used to group the images (of multiple channels) that belongs to the same sample. ', '', 'Extract from file/folder names:', '<Edit the regular expression to extract metadata from your file names', '<Submit', '<Extract metadata ', '<Update']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<SampleName>.*)_BR(?P<BiolRepl>[1-3])_N(?P<numbImage>[0-9]{1,2})_
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['This module allows you to assign a meaningful name to each image by which other modules will refer to it.', '', '<Update']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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:CellP2D_V1_03202022_PART1
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    Set intensity range from:Image metadata
    Assignments count:8
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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notes:['This module allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', 'Depending on the previous ,,Metadata module,, you can group your samples.', '', '<Group for SampleName and NumberImage.']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
    Do you want to group your images?:Yes
    grouping metadata count:2
    Metadata category:SampleName
    Metadata category:BiolRepl

ColorToGray:[module_num:5|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notes:['This module combine all the channels together to generate the original picture (in grey), it is used for filtering the soma (based on intensity) and for Tiling', '', '<Remove channels if required']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
    Select the input image:CellP2D_V1_03202022_PART1
    Conversion method:Combine
    Image type:Channels
    Name the output image:OrigGray_Image
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    Channel count:7
    Channel number:1
    Relative weight of the channel:1.0
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    Channel number:2
    Relative weight of the channel:1.0
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    Channel number:3
    Relative weight of the channel:1.0
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    Channel number:4
    Relative weight of the channel:1.0
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    Channel number:5
    Relative weight of the channel:1.0
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    Channel number:6
    Relative weight of the channel:1.0
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    Channel number:7
    Relative weight of the channel:1.0
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
RescaleIntensity:[module_num:6|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notes:['SEGMENTING NUCLEI (NU)', 'This module rescale every pixel so that the minimum has an intensity of zero and the maximum has an intensity of one.', '', '']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enabled:False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
    Select the input image:NU_Rawgrey
    Name the output image:allNU_RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
MedianFilter:[module_num:7|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notes:['SEGMENTING NUCLEI (NU)', 'This module extract the original picture of nuclei and apply a filter to reduce salt-and-pepper noise in an image while preserving borders', '', '<Choose a small window (in pixel unit) if you have to reduce noise in small areas, if you choose a big window it will blurr the image.']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enabled:False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
    Select the input image:allNU_RescaleIntensity
    Name the output image:allNU_MedianFilter
    Window:10

IdentifyPrimaryObjects:[module_num:8|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notes:['SEGMENTING NUCLEI (NU). It is important to identify all the nuclei that are visible, later it will be followed by IdentificationSecondaryObjects.', '', '<Set the diameter, in pixel unit, use the measure tool (If you have big variabilities is approximately the media of the smallest and the biggest).', '<Adjust the "Lower and upper bounds on Threshold" by measuring the pixel unit (check the histogram intensity).', '<Adjust the "Threshold correction factor" (>1 more stringent and lower than 1 more relax). This correction factor helps when you have variability of how many objects covered the area in different batches, it is almost like setting a standard deviation of your threshold.', '', '']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enabled:False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
    Select the input image:allNU_MedianFilter
    Name the primary objects to be identified:allNU_Identify
    Typical diameter of objects, in pixel units (Min,Max):50,400
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Suppress local maxima that are closer than this minimum allowed distance:80
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Log transform before thresholding?:Yes
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
OverlayObjects:[module_num:9|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notes:['SEGMENTING NUCLEI (NU) - Groundtruth - It is used to Check the segmentation and It will be used for Tiling', 'This module overlays the original picture of nuclei (NU) rescaled, with the previously Identified objects of nuclei (from IdentifyPrimaryObjects)', '', '<you con modulate the opacity of the overlay (close to zero is more transparent)', '', '']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enabled:False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
    Input:allNU_RescaleIntensity
    Name the output image:allNU_OverlayObjects
    Objects:allNU_Identify
    Opacity:0.4

ColorToGray:[module_num:10|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notes:['This module split the channels and transform to gray. These New Images are used for further segmentation and identification of nuclei (NU), soma (SO), and cytoplasm (CY).', '', '<If your Channel Number doesn’t match with your Image Name (organelle) please CHANGE the RESPECTIVE NUMBER (not the name)', '', '']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
    Select the input image:CellP2D_V1_03202022_PART1
    Conversion method:Split
    Image type:Channels
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    Channel count:8
    Channel number:1
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    Image name:NU_Rawgrey
    Channel number:2
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    Image name:LS_Rawgrey
    Channel number:3
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    Image name:MT_Rawgrei
    Channel number:4
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    Image name:GL_Rawgrey
    Channel number:5
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    Image name:PO_Rawgrey
    Channel number:6
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    Image name:ER_Rawgrey
    Channel number:7
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    Image name:LD_Rawgrey
    Channel number:8
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    Image name:RE_Rawgrey

ColorToGray:[module_num:11|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notes:['SEGMENTING SOMA (SO)', 'This module combine channels for the identification of SOMA', '', '<Combined multiple channels which might help in the recognition of SOMA', '']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
    Select the input image:CellP2D_V1_03202022_PART1
    Conversion method:Combine
    Image type:Channels
    Name the output image:Combined_Channels_SO
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    Channel count:4
    Channel number:2
    Relative weight of the channel:1
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    Channel number:5
    Relative weight of the channel:1
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    Channel number:6
    Relative weight of the channel:1.0
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    Channel number:8
    Relative weight of the channel:1.0
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
RescaleIntensity:[module_num:12|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notes:['SEGMENTING SOMA (SO)', 'This modulerescale every pixel so that the minimum has an intensity of zero and the maximum has an intensity of one.']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
    Select the input image:Combined_Channels_SO
    Name the output image:allSO_RescaledIntensity
    Rescaling method:Divide by the image's maximum
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
GaussianFilter:[module_num:13|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
    Select the input image:allSO_RescaledIntensity
    Name the output image:allSO_GaussianFilter
    Sigma:10

MedianFilter:[module_num:14|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notes:['SEGMENTING SOMA (SO)', 'This module extract the picture, previously generated by combining channles, and apply a filter to reduce salt-and-pepper noise in an image while preserving borders.', '', '<Choose a small window (in pixel unit) if you have to reduce noise in small areas, if you choose a big window it will blurr the image.']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
    Select the input image:allSO_GaussianFilter
    Name the output image:allSO_MedianFilter
    Window:5

IdentifySecondaryObjects:[module_num:15|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notes:['SEGMENTING SOMA (SO)', 'This module identify the soma (SO) based on the presence of the nuclei (NU).', '', '<Set the "size of adaptive window" as the size of your whole soma area by using the measure tool (use the short axis).', '<Adjust the "Lower and upper bounds on Threshold" by measuring the pixel unit (check the histogram intensity).', '<Adjust the "Threshold correction factor" (>1 more stringent and lower than 1 more relax). This correction factor helps when you have variability of how many objects covered the area in different batches, it is almost like setting a standard deviation of your threshold.', '']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
    Select the input objects:allNU_Identify
    Name the objects to be identified:allSO_Identify
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:allSO_MedianFilter
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.003,1
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    Log transform before thresholding?:Yes
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
OverlayOutlines:[module_num:16|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notes:['SEGMENTING SOMA (SO) - Groundtruth - It is used to Check the segmentation and It will be used for Tiling', 'This module overlays the picture of soma (SO) rescaled, with the previously Identified objects of soma (from IdentifySecondaryObjects)']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:allSO_RescaledIntensity
    Name the output image:SO_OverlayObjects
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#FF8080
    Select objects to display:allSO_Identify

FilterObjects:[module_num:17|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notes:['SEGMENTING SOMA (SO)', 'FILTER1:This module allows to Filter out Object (Soma) that were touching the borders, including their related object (nuclei).', '', 'The new picture will contain the Soma Objects together with their Nuclei']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enabled:False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
    Select the objects to filter:allSO_Identify
    Name the output objects:SO_FilterObjects
    Select the filtering mode:Image or mask border
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    Additional object count:1
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    Keep removed objects as a seperate set?:No
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    Select additional object to relabel:allNU_Identify
    Name the relabeled objects:NU_Filtered1

MeasureObjectIntensity:[module_num:18|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notes:['SEGMENTING SOMA (SO) - It is used to filter low transfected cells', 'This module measure the pixel intensity from a the original grey picture (OrigGrayColor, from ColorToGray#2 ) within the previously identified object (soma, SO from FilterObjects).', '']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
    Select images to measure:OrigGray_Image
    Select objects to measure:allSO_Identify

FilterObjects:[module_num:19|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notes:['SEGMENTING SOMA (SO)', 'FILTER2:This module allows to Filter out Object (Soma) secondary cells which are not/poorly transfected.', '', 'The new picture will contains ONLY ONE Soma Object together with its own Nucleus.']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
    Select the objects to filter:allSO_Identify
    Name the output objects:SO_Identify
    Select the filtering mode:Measurements
    Select the filtering method:Maximal
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    Measurement count:2
    Additional object count:1
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Intensity_IntegratedIntensityEdge_OrigGray_Image
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    Select the measurement to filter by:AreaShape_Area
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    Select additional object to relabel:allNU_Identify
    Name the relabeled objects:NU_Identify

ConvertObjectsToImage:[module_num:20|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notes:['SEGMENTING SOMA (SO) - Exporting Objects for further analysisi in PART-2 and PART-3 of the pipeline.', 'This module convert the object in a image Uint16 ']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
    Select the input objects:SO_Identify
    Name the output image:SO_objectsU16
    Select the color format:uint16
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
SaveImages:[module_num:21|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notes:['SEGMENTING SOMA (SO) - Exporting Objects for further analysisi in PART-2 and PART-3 of the pipeline.', 'Save image Uint16 ']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
    Select the type of image to save:Image
    Select the image to save:SO_objectsU16
    Select method for constructing file names:From image filename
    Select image name for file prefix:CellP2D_V1_03202022_PART1
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_SO_objects
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ConvertObjectsToImage:[module_num:22|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notes:['SEGMENTING NUCLEI (NU) - Exporting Objects for further analysisi in PART-2 and PART-3 of the pipeline.', 'This module convert the object in a image Uint16 ']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
    Select the input objects:NU_Identify
    Name the output image:NU_objectsU16
    Select the color format:uint16
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
SaveImages:[module_num:23|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notes:['SEGMENTING NUCLEI (NU) - Exporting Objects for further analysisi in PART-2 and PART-3 of the pipeline.', 'Save image Uint16 ']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
    Select the type of image to save:Image
    Select the image to save:NU_objectsU16
    Select method for constructing file names:From image filename
    Select image name for file prefix:CellP2D_V1_03202022_PART1
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_NU_objects
    Saved file format:tiff
    Output file location:Default Output Folder|D:\\GITHUB PIPELINE\\SO_UNIT16
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

OverlayObjects:[module_num:24|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notes:['SEGMENTING NUCLEI (NU) - Groundtruth - It is used to Check the segmentation and It will be used for Tiling', 'This module overlays the original picture of nuclei (NU) rescaled, with the previously Identified and Filtered objects of nuclei (from IdentifyPrimaryObjects) ']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
    Input:allNU_RescaleIntensity
    Name the output image:NU_OverlayObjects
    Objects:NU_Identify
    Opacity:0.4

OverlayOutlines:[module_num:25|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notes:['SEGMENTING NUCLEI (NU) - Groundtruth - It is used to Check the segmentation and It will be used for Tiling', 'This module overlays the original picture of nuclei (NU) rescaled, with the previously Identified and Filtered objects of nuclei (from FilteredObjects) ']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:allNU_RescaleIntensity
    Name the output image:NU_OverlayOutlines
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#0606F9
    Select objects to display:NU_Identify

ExpandOrShrinkObjects:[module_num:26|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notes:['This module shrink the Nuclei by a specific pixel number.', '']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
    Select the input objects:NU_Identify
    Name the output objects:NU_Shrunken
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:4
    Fill holes in objects so that all objects shrink to a single point?:No

IdentifyTertiaryObjects:[module_num:27|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notes:['SEGMENTING CYTOSOL (CY) - It is used for masking the background in PART-2 of the pipeline', '', 'If you DONT see only ONE cytoplasm, please check the previous modules']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
    Select the larger identified objects:SO_Identify
    Select the smaller identified objects:NU_Shrunken
    Name the tertiary objects to be identified:CY_Identify
    Shrink smaller object prior to subtraction?:No

ConvertObjectsToImage:[module_num:28|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notes:['SEGMENTING CYTOSOL (CY)- Exporting Objects for further analysisi in PART-2 of the pipeline.', 'This module convert the object in a image Uint16 ']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
    Select the input objects:CY_Identify
    Name the output image:CY_objectsU16
    Select the color format:uint16
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
SaveImages:[module_num:29|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notes:['SEGMENTING CYTOSOL (CY)- Exporting Objects for further analysisi in PART-2 of the pipeline.', 'Save image uint16']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
    Select the type of image to save:Image
    Select the image to save:CY_objectsU16
    Select method for constructing file names:From image filename
    Select image name for file prefix:CellP2D_V1_03202022_PART1
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CY_objects
    Saved file format:tiff
    Output file location:Default Output Folder|D:\\GITHUB PIPELINE\\CY_UNIT16
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

OverlayOutlines:[module_num:30|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notes:['SEGMENTING CYTOSOL (CY) - Groundtruth - It is used to Check the segmentation and It will be used for Tiling', 'This module overlays the original grey picture (OrigGrayColor), with the previously Identified objects of cytoplasm (from IdentifyTertiaryObjects)']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:OrigGray_Image
    Name the output image:SO_NU_CY
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FFC1C1
    Select objects to display:CY_Identify
    Select outline color:#0080FF
    Select objects to display:NU_Identify

OverlayObjects:[module_num:31|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notes:['SEGMENTING CYTOSOL (CY) - Groundtruth - It is used to Check the segmentation and It will be used for Tiling', 'This module overlays the original grey picture (OrigGrayColor), with the previously Identified objects of cytoplasm (from IdentifyTertiaryObjects)']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
    Input:OrigGray_Image
    Name the output image:CY_OverlayObjects
    Objects:CY_Identify
    Opacity:0.4

MaskImage:[module_num:32|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notes:['TRIAL MASKING IMAGE - MaskImage hides certain portions of an image (based on previously identified objects or a binary image) so they are ignored by subsequent mask-respecting modules in the pipeline.  ', 'It is used for Tiling', '', '<select which mask to use: whole soma (SO_Identify) or cytoplasm (CY_Identify).']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
    Select the input image:CellP2D_V1_03202022_PART1
    Name the output image:Nuclei_Soma_Masked
    Use objects or an image as a mask?:Objects
    Select object for mask:CY_Identify
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    Invert the mask?:No

ColorToGray:[module_num:33|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notes:['TRIAL MASKING IMAGE ', 'This module combine all the channeles, after being Masked, in a gray picture.', 'It is used for Tiling.']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
    Select the input image:Nuclei_Soma_Masked
    Conversion method:Combine
    Image type:Channels
    Name the output image:AfterMasked_Image
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    Channel count:7
    Channel number:1
    Relative weight of the channel:1.0
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    Channel number:2
    Relative weight of the channel:1.0
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    Channel number:3
    Relative weight of the channel:1.0
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    Channel number:4
    Relative weight of the channel:1.0
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    Channel number:5
    Relative weight of the channel:1.0
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    Channel number:6
    Relative weight of the channel:1.0
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    Channel number:7
    Relative weight of the channel:1.0
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
Tile:[module_num:34|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notes:['TILE of the identified objects:', 'segmented soma (SO), cytoplasm (CY), nuclei (NU) and the resulted masked cells (AfterMasked_Image).']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
    Select an input image:OrigGray_Image
    Name the output image:TILE_SegmSoma
    Tile assembly method:Within cycles
    Final number of rows:1
    Final number of columns:12
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:No
    Automatically calculate number of rows?:Yes
    Automatically calculate number of columns?:Yes
    Select an additional image to tile:allNU_RescaleIntensity
    Select an additional image to tile:allNU_OverlayObjects
    Select an additional image to tile:NU_OverlayObjects
    Select an additional image to tile:SO_OverlayObjects
    Select an additional image to tile:SO_NU_CY
    Select an additional image to tile:AfterMasked_Image

SaveImages:[module_num:35|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notes:['SAVE TILE of the identified objects:', 'segmented soma (SO), cytoplasm (CY), nuclei (NU) and the resulted masked cells (AfterMasked_Image).']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
    Select the type of image to save:Image
    Select the image to save:TILE_SegmSoma
    Select method for constructing file names:From image filename
    Select image name for file prefix:CellP2D_V1_03202022_PART1
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_TILE_SegmentedNucleiSomaCytoplasm
    Saved file format:tiff
    Output file location:Default Output Folder|D:\\OLD DATASEAnalysisCellProfiler11032021\\Mask SOMA
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MeasureImageQuality:[module_num:36|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enabled:False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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:1
    Threshold count:1
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    Include the image rescaling value?:Yes
    Calculate blur metrics?:No
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    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:Yes
    Use all thresholding methods?:Yes
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