CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:90
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['CellP-2D_v1wNU_PART-2of3_03202022-----------This pipeline is Only for 2D-Analysis with Nuclei', '', '<Upload the following files:', '- Objects identified with Part1 (CY or SO for Masking, and NU for Tiling)', '- Original File images (TIFF-single zstack)', '']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['This module allows you to extract information describing your images (i.e, metadata).', '', 'The first Metdata section "Extract from file/folder names" is deputed for the images containing objects (CY, SO, NU)', 'The second Metdata section "Extract from Image file header"  assigned the metadata to all the pictures', '', '<<Extract from file/folder names:', '               <Edit the regular expression to match your file names', '               <Submit', '<<Extract from image file headers:', '               <Extract metadata ', ' <Update']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<ImageType>.*)_(?P<SampleName>.*)_BR(?P<BiologicalReplicate>[1-3])_N(?P<NumbImage>[0-9]{1,2})_Unmixed-1_(?P<MaskType>.*)_(?P<Imagetype>.*)
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (and (file does contain "objects"))
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    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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notes:['This module allows you to assign a meaningful name to each image by which other modules will refer to it.', 'it is used to give name to:', '-objects files previously identified in Part1 (CY, SO, NU) ', '- channels  (from Original Files) see LS_raw for Lysosomes; MT_raw for Mitochondria, etc', '', '<Update', '']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:10
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (and (metadata does MaskType "CY"))
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    Name to assign these objects:CY_Mask
    Select the image type:Objects
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    Select the rule criteria:and (and (metadata does MaskType "SO"))
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    Name to assign these objects:SO_Mask
    Select the image type:Objects
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    Select the rule criteria:and (and (metadata does MaskType "NU"))
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    Name to assign these objects:NU_objects
    Select the image type:Objects
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    Select the rule criteria:and (file doesnot contain "objects") (metadata does C "0")
    Name to assign these images:NU_raw
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "1")
    Name to assign these images:LS_raw
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "2")
    Name to assign these images:MT_raw
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "3")
    Name to assign these images:GL_raw
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "4")
    Name to assign these images:PO_raw
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "5")
    Name to assign these images:ER_raw
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "6")
    Name to assign these images:LD_raw
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['This module allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', 'Depending on the previous ,,Metadata module,, you can group your samples.', '', '<Group for SampleName, BiologicalReplicate and NumberImage. ', ' You can change the groups at your convenience, ', 'check the Image sets if it correspond to what expected.']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
    Do you want to group your images?:Yes
    grouping metadata count:3
    Metadata category:SampleName
    Metadata category:BiologicalReplicate
    Metadata category:NumbImage

RescaleIntensity:[module_num:5|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notes:['SEGMENTING NUCLEI (NU) - RescaleIntensity', 'This module rescale every pixel so that the minimum has an intensity of zero and the maximum has an intensity of one.']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
    Select the input image:NU_raw
    Name the output image:NU_Rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
MaskImage:[module_num:6|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notes:['SEGMENTING NUCLEI (NU) - MaskImage ', 'This module mask the channel of interest with the previously identified soma region, in order to focus the subcellular segmentation to only one cells/area.', '', '<select which mask to use: whole soma (SO_Identify) or cytoplasm (CY_Identify).']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
    Select the input image:NU_Rescaled
    Name the output image:NU_RescaledMasked
    Use objects or an image as a mask?:Objects
    Select object for mask:SO_Mask
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    Invert the mask?:No

RescaleIntensity:[module_num:7|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notes:['SEGMENTING LYSOSOMES (LS) - RescaleIntensity', 'This module rescale every pixel so that the minimum has an intensity of zero and the maximum has an intensity of one.']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
    Select the input image:LS_raw
    Name the output image:LS_Rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
MaskImage:[module_num:8|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notes:['SEGMENTING LYSOSOMES (LS) - MaskImage ', 'This module mask the channel of interest with the previously identified soma region, in order to focus the subcellular segmentation to only one cells/area.', '', '<select which mask to use: whole soma (SO_Identify) or cytoplasm (CY_Identify).', '']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
    Select the input image:LS_Rescaled
    Name the output image:LS_RescaledMasked
    Use objects or an image as a mask?:Objects
    Select object for mask:CY_Mask
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    Invert the mask?:No

MedianFilter:[module_num:9|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notes:['SEGMENTING LYSOSOMES (LS) - Denoise', 'This module extract the original picture of nuclei and apply a filter to reduce salt-and-pepper noise in an image while preserving borders', '', '<Choose a small window (in pixel unit) if you have to reduce noise in small areas, if you choose a big window it will blurr the image.']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
    Select the input image:LS_RescaledMasked
    Name the output image:LS_MedianFilter
    Window:2

EnhanceOrSuppressFeatures:[module_num:10|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notes:['SEGMENTING LYSOSOMES (LS) - BIG', 'EnhanceOrSuppressFeatures enhances or suppresses certain image features (such as speckles, ring shapes, and neurites), which can improve subsequent identification of objects', '', '<<Feature size:', '<Diameter in pixel unit of the biggest objects ']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
    Select the input image:LS_MedianFilter
    Name the output image:LS_EnhanceOrSuppressFeaturesBIG
    Select the operation:Enhance
    Feature size:40
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:11|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notes:['SEGMENTING LYSOSOMES (LS) - BIG', '', '<<Typical diameter of objects:', '        <Diameter in pixel unit of the biggest objects ', '<<Size of adaptive window:', '        <Length in pixel unit of the area within objects to threshold', '<<Lower and upper bonds on threshold', '        <Set the pixel unit (check the histogram intensity).', '<<Threshold correction factor ', '        <Set lower than 1 to have a more stringent thresholding along batches, higher than 1 to have it more relaxed. The correction factor helps when you have variability across different batches, it is almost like setting a standard deviation of your threshold.']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
    Select the input image:LS_EnhanceOrSuppressFeaturesBIG
    Name the primary objects to be identified:LS_IdentifyBIG
    Typical diameter of objects, in pixel units (Min,Max):10,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Propagate
    Size of smoothing filter:2
    Suppress local maxima that are closer than this minimum allowed distance:16
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.34
    Threshold correction factor:0.7
    Lower and upper bounds on threshold:0.08197,1
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:20
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    Thresholding method:Otsu

EnhanceOrSuppressFeatures:[module_num:12|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notes:['SEGMENTING LYSOSOMES (LS) - SMALL', 'EnhanceOrSuppressFeatures enhances or suppresses certain image features (such as speckles, ring shapes, and neurites), which can improve subsequent identification of objects', '', '<<Feature size:', '<Diameter in pixel unit of the smallest objects ']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
    Select the input image:LS_MedianFilter
    Name the output image:LS_EnhanceOrSuppressFeaturesSMALL
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:13|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notes:['', '<<Typical diameter of objects:', '        <Diameter in pixel unit of the smallest objects ', '<<Size of adaptive window:', '        <Length in pixel unit of the area within objects to threshold', '<<Lower and upper bonds on threshold', '        <Set the pixel unit (check the histogram intensity).', '<<Threshold correction factor ', '        <Set lower than 1 to have a more stringent thresholding along batches, higher than 1 to have it more relaxed. The correction factor helps when you have variability across different batches, it is almost like setting a standard deviation of your threshold.']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
    Select the input image:LS_EnhanceOrSuppressFeaturesSMALL
    Name the primary objects to be identified:LS_IdentifySMALL
    Typical diameter of objects, in pixel units (Min,Max):2,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Propagate
    Size of smoothing filter:2
    Suppress local maxima that are closer than this minimum allowed distance:10
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.34
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.06,1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:Yes
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    Size of adaptive window:20
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    Thresholding method:Otsu

CombineObjects:[module_num:14|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notes:['SEGMENTING LYSOSOMES (LS)', 'This module combine the previously Identifyed Lysosomes (LS) objects (BIG and SMALL) into one sets of objects (ALL)', '']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
    Select initial object set:LS_IdentifyBIG
    Select object set to combine:LS_IdentifySMALL
    Select how to handle overlapping objects:Merge
    Name the combined object set:LS_IdentifyALL

ConvertObjectsToImage:[module_num:15|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notes:['SEGMENTING LYSOSOMES (LS) ', 'This module transform your Identified objects LS BIG into an Image (in Color), it is used for Tiling. ']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
    Select the input objects:LS_IdentifyBIG
    Name the output image:LS_objectsColorBIG
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:16|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notes:['SEGMENTING LYSOSOMES (LS) ', 'This module transform your Identified objects LS SMALL into an Image (in Color), it is used for Tiling. ']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
    Select the input objects:LS_IdentifySMALL
    Name the output image:LS_objectsColorSMALL
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:17|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notes:['SEGMENTING LYSOSOMES (LS) - Exporting Objects for further analysis in PART-3 of the pipeline.', 'This module convert the Identified and Combined objects in a image Uint16 (LS_objectsU16)']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
    Select the input objects:LS_IdentifyALL
    Name the output image:LS_objectU16
    Select the color format:uint16
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
SaveImages:[module_num:18|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notes:['SEGMENTING LYSOSOMES (LS) - Exporting Objects for further analysisi in PART-3 of the pipeline.', 'Save image Uint16 ']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
    Select the type of image to save:Image
    Select the image to save:LS_objectU16
    Select method for constructing file names:From image filename
    Select image name for file prefix:LS_raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_LS_objects
    Saved file format:tiff
    Output file location:Default Output Folder|D:\\GITHUB PIPELINE\\LS_UNIT16
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

OverlayObjects:[module_num:19|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notes:['SEGMENTING LYSOSOMES (LS) -BIG - Groundtruth - It is used to Check the segmentation and It will be used for Tiling', 'This module overlays the original picture of Lysosomes (LS) rescaled, with the previously Identified objects LS (from IdentifyPrimaryObjects, LS BIG)', '', '<you con modulate the opacity of the overlay (close to zero is more transparent)', '']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
    Input:LS_RescaledMasked
    Name the output image:LS_OverlayObjectsBIG
    Objects:LS_IdentifyBIG
    Opacity:0.4

OverlayObjects:[module_num:20|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notes:['SEGMENTING LYSOSOMES (LS) - SMALL - Groundtruth - It is used to Check the segmentation and It will be used for Tiling', 'This module overlays the picture of Lysosomes (LS) rescaled, with the previously Identified objects and combined of LS (from IdentifyPrimaryObjects, LS SMALL)', '', '<you con modulate the opacity of the overlay (close to zero is more transparent)']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
    Input:LS_RescaledMasked
    Name the output image:LS_OverlayObjectsSMALL
    Objects:LS_IdentifySMALL
    Opacity:0.4

OverlayObjects:[module_num:21|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notes:['SEGMENTING LYSOSOMES (LS) - ALL - Groundtruth - It is used to Check the segmentation and It will be used for Tiling', 'This module overlays the picture of Lysosomes (LS) rescaled, with the previously Identified and combined objects of LS (from CombinedObjects, LS ALL)', '', '<you con modulate the opacity of the overlay (close to zero is more transparent)']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
    Input:LS_RescaledMasked
    Name the output image:LS_OverlayObjectsALL
    Objects:LS_IdentifyALL
    Opacity:0.4

OverlayOutlines:[module_num:22|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notes:['SEGMENTING LYSOSOMES (LS) - ALL - Groundtruth - It is used to Check the segmentation and It will be used for Tiling', 'This module overlays the picture of Lysosomes (LS) rescaled, with the previously Identified and combined objects of LS (from CombinedObjects, LS ALL)', '', '<you con modulate the opacity of the overlay (close to zero is more transparent)']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:LS_RescaledMasked
    Name the output image:LS_OverlayOutlines
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:cyan
    Select objects to display:LS_IdentifyALL

Tile:[module_num:23|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notes:['TILE of the identified objects (LS)', '', 'Original picture Rescaled, Denoised picture, Identified objects, Groundtruth (Overlay with the original picture)', '']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
    Select an input image:LS_RescaledMasked
    Name the output image:TILE_SegmLS
    Tile assembly method:Within cycles
    Final number of rows:8
    Final number of columns:12
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:No
    Automatically calculate number of rows?:Yes
    Automatically calculate number of columns?:Yes
    Select an additional image to tile:LS_MedianFilter
    Select an additional image to tile:LS_EnhanceOrSuppressFeaturesSMALL
    Select an additional image to tile:LS_objectsColorSMALL
    Select an additional image to tile:LS_OverlayObjectsSMALL
    Select an additional image to tile:LS_OverlayOutlines

SaveImages:[module_num:24|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notes:['TILE of the identified objects (LS)', 'Save Image']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
    Select the type of image to save:Image
    Select the image to save:TILE_SegmLS
    Select method for constructing file names:From image filename
    Select image name for file prefix:LS_raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_TILE_SegmLS
    Saved file format:tiff
    Output file location:Default Output Folder|D:\\OLD DATASEAnalysisCellProfiler11032021\\Segm LYSO
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

RescaleIntensity:[module_num:25|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notes:['SEGMENTING MITOCHONDRIA (MT)- RescaleIntensity', 'This module rescale every pixel so that the minimum has an intensity of zero and the maximum has an intensity of one.']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
    Select the input image:MT_raw
    Name the output image:MT_RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
MaskImage:[module_num:26|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notes:['SEGMENTING MITOCHONDRIA (MT) - MaskImage ', 'This module mask the channel of interest with the previously identified soma region, in order to focus the subcellular segmentation to only one cells/area.', '', '<select which mask to use: whole soma (SO_Identify) or cytoplasm (CY_Identify).', '']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
    Select the input image:MT_RescaleIntensity
    Name the output image:MT_RescaledMasked
    Use objects or an image as a mask?:Objects
    Select object for mask:CY_Mask
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    Invert the mask?:No

ReduceNoise:[module_num:27|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notes:['SEGMENTING MITOCHONDRIA (MT)   - Denoise', 'ReduceNoise performs non-local means noise reduction. Instead of only using a neighborhood of pixels around a central pixel for denoising, such as in GaussianFilter, multiple neighborhoods are pooled together. The neighborhood pool is determined by scanning the image for regions similar to the area around the central pixel using a correlation metric and a cutoff value.', '', '<<Distance:', '      <Set the distance by measuring the distance in between objects, including the low intensities pixels.', '<<Size:', '      <Set the size of the cancelling patches as the distance in between objects from the brightest pixel to the brightest pixel (usually is the double of the Distance or higher; increase the smooth).', '<<Cut-off distance (the permissiveness of the patches):', '       < Increasing the cut-off distance (more than 0.1) increases the smoothness of the image. Likewise, decreasing the cut-off distance decreases the smoothness of the image.']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
    Select the input image:MT_RescaledMasked
    Name the output image:MT_ReduceNoise
    Size:8
    Distance:2
    Cut-off distance:0.2

MedianFilter:[module_num:28|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
    Select the input image:MT_ReduceNoise
    Name the output image:MedianFilter
    Window:3

IdentifyPrimaryObjects:[module_num:29|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notes:['SEGMENTING MITOCHONDRIA (MT)', '', '<<Typical diameter of objects:', '        <Diameter in pixel unit of the objects ', '<<Size of adaptive window:', '        <Length in pixel unit of the area within objects to threshold', '<<Lower and upper bonds on threshold', '        <Set the pixel unit (check the histogram intensity).', '<<Threshold correction factor ', '        <Set lower than 1 to have a more stringent thresholding along batches, higher than 1 to have it more relaxed. The correction factor helps when you have variability across different batches, it is almost like setting a standard deviation of your threshold.']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
    Select the input image:MT_ReduceNoise
    Name the primary objects to be identified:MT_Identify
    Typical diameter of objects, in pixel units (Min,Max):4,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Propagate
    Size of smoothing filter:2
    Suppress local maxima that are closer than this minimum allowed distance:50
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.14,1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:20
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    Thresholding method:Otsu

ConvertObjectsToImage:[module_num:30|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notes:['SEGMENTING MITOCHONDRIA (MT)', 'This module transform your Identified objects MT into an Image (in Color), it is used for Tiling. ']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
    Select the input objects:MT_Identify
    Name the output image:MT_objectsColor
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:31|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notes:['SEGMENTING MITOCHONDRIA (MT) - Exporting Objects for further analysis in PART-3 of the pipeline.', 'This module convert the Identified objects in a image Uint16 (MT_objectsU16)']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
    Select the input objects:MT_Identify
    Name the output image:MT_objectsU16
    Select the color format:uint16
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
SaveImages:[module_num:32|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notes:['SEGMENTING MITOCHONDRIA (MT) - Exporting Objects for further analysisi in PART-3 of the pipeline.', 'Save image Uint16 ']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
    Select the type of image to save:Image
    Select the image to save:MT_objectsU16
    Select method for constructing file names:From image filename
    Select image name for file prefix:MT_raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_MT_objects
    Saved file format:tiff
    Output file location:Default Output Folder|D:\\GITHUB PIPELINE\\MT_UNIT16
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

OverlayObjects:[module_num:33|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notes:['SEGMENTING MITOCHONDRIA (MT) - Groundtruth - It is used to Check the segmentation and It will be used for Tiling', 'This module overlays the original picture of the organelle rescaled, with the previously Identified objects MT (from IdentifyPrimaryObjects)', '', '<you con modulate the opacity of the overlay (close to zero is more transparent)']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
    Input:MT_RescaleIntensity
    Name the output image:MT_OverlayObjects
    Objects:MT_Identify
    Opacity:0.4

OverlayOutlines:[module_num:34|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notes:['SEGMENTING MITOCHONDRIA (MT) - Groundtruth - It is used to Check the segmentation and It will be used for Tiling', 'This module overlays the original picture of the organelle rescaled, with the previously Identified objects MT (from IdentifyPrimaryObjects)', '', '<you con modulate the opacity of the overlay (close to zero is more transparent)']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:MT_RescaledMasked
    Name the output image:MT_OverlayOutlines
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#80FF80
    Select objects to display:MT_Identify

Tile:[module_num:35|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notes:['TILE of the identified objects (MT)', '', 'Original picture Rescaled, Denoised picture, Identified objects, Groundtruth (Overlay with the original picture)', '']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
    Select an input image:MT_RescaleIntensity
    Name the output image:TILE_SegmMT
    Tile assembly method:Within cycles
    Final number of rows:8
    Final number of columns:12
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:No
    Automatically calculate number of rows?:Yes
    Automatically calculate number of columns?:Yes
    Select an additional image to tile:MT_ReduceNoise
    Select an additional image to tile:MT_objectsColor
    Select an additional image to tile:MT_OverlayObjects
    Select an additional image to tile:MT_OverlayOutlines

SaveImages:[module_num:36|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notes:['TILE of the identified objects (MT)', 'Save Image']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
    Select the type of image to save:Image
    Select the image to save:TILE_SegmMT
    Select method for constructing file names:From image filename
    Select image name for file prefix:MT_raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_TILE_SegmMT
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

RescaleIntensity:[module_num:37|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notes:['SEGMENTING GOLGI (GL) - RescaleIntensity', 'This module rescale every pixel so that the minimum has an intensity of zero and the maximum has an intensity of one.']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
    Select the input image:GL_raw
    Name the output image:GL_RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
MaskImage:[module_num:38|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notes:['SEGMENTING GOLGI (GL)- MaskImage ', 'This module mask the channel of interest with the previously identified soma region, in order to focus the subcellular segmentation to only one cells/area.', '', '<select which mask to use: whole soma (SO_Identify) or cytoplasm (CY_Identify).', '']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
    Select the input image:GL_RescaleIntensity
    Name the output image:GL_RescaledMasked
    Use objects or an image as a mask?:Objects
    Select object for mask:CY_Mask
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    Invert the mask?:No

ReduceNoise:[module_num:39|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notes:['SEGMENTING GOLGI (GL)  - Denoise', 'ReduceNoise performs non-local means noise reduction. Instead of only using a neighborhood of pixels around a central pixel for denoising, such as in GaussianFilter, multiple neighborhoods are pooled together. The neighborhood pool is determined by scanning the image for regions similar to the area around the central pixel using a correlation metric and a cutoff value.', '', '<<Distance:', '      <Set the distance by measuring the distance in between objects, including the low intensities pixels.', '<<Size:', '      <Set the size of the cancelling patches as the distance in between objects from the brightest pixel to the brightest pixel (usually is the double of the Distance or higher; increase the smooth).', '<<Cut-off distance (the permissiveness of the patches):', '       < Increasing the cut-off distance (more than 0.1) increases the smoothness of the image. Likewise, decreasing the cut-off distance decreases the smoothness of the image.']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
    Select the input image:GL_RescaledMasked
    Name the output image:GL_ReducedNoise
    Size:4
    Distance:2
    Cut-off distance:0.1

IdentifyPrimaryObjects:[module_num:40|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notes:['SEGMENTING GOLGI (GL)', '', '<<Typical diameter of objects:', '        <Diameter in pixel unit of the objects ', '<<Size of adaptive window:', '        <Length in pixel unit of the area within objects to threshold', '<<Lower and upper bonds on threshold', '        <Set the pixel unit (check the histogram intensity).', '<<Threshold correction factor ', '        <Set lower than 1 to have a more stringent thresholding along batches, higher than 1 to have it more relaxed.  The correction factor helps when you have variability across different batches, it is almost like setting a standard deviation of your threshold.']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
    Select the input image:GL_ReducedNoise
    Name the primary objects to be identified:GL_Identify
    Typical diameter of objects, in pixel units (Min,Max):4,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.34
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.14,0.5
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:Yes
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    Size of adaptive window:20
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    Thresholding method:Otsu

ConvertObjectsToImage:[module_num:41|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notes:['SEGMENTING GOLGI (GL)', 'This module transform your Identified objects GL into an Image (in Color), it is used for Tiling. ']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
    Select the input objects:GL_Identify
    Name the output image:GL_objectsColor
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:42|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notes:['SEGMENTING GOLGI (GL) - Exporting Objects for further analysis in PART-3 of the pipeline.', 'This module convert the Identified objects in a image Uint16 (GL_objectsU16)']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
    Select the input objects:GL_Identify
    Name the output image:GL_objectsU16
    Select the color format:uint16
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
SaveImages:[module_num:43|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notes:['SEGMENTING GOLGI (GL)- Exporting Objects for further analysisi in PART-3 of the pipeline.', 'Save image Uint16 ']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
    Select the type of image to save:Image
    Select the image to save:GL_objectsU16
    Select method for constructing file names:From image filename
    Select image name for file prefix:GL_raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_GL_objects
    Saved file format:tiff
    Output file location:Default Output Folder|D:\\GITHUB PIPELINE\\GL_UNIT16
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

OverlayObjects:[module_num:44|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notes:['SEGMENTING GOLGI (GL)- Groundtruth - It is used to Check the segmentation and It will be used for Tiling', 'This module overlays the original picture of the organelle rescaled, with the previously Identified objects MT (from IdentifyPrimaryObjects)', '', '<you con modulate the opacity of the overlay (close to zero is more transparent)']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
    Input:GL_RescaleIntensity
    Name the output image:GL_OverlayObjects
    Objects:GL_Identify
    Opacity:0.4

OverlayOutlines:[module_num:45|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notes:['SEGMENTING GOLGI (GL)- Groundtruth - It is used to Check the segmentation and It will be used for Tiling', 'This module overlays the original picture of the organelle rescaled, with the previously Identified objects MT (from IdentifyPrimaryObjects)', '', '<you con modulate the opacity of the overlay (close to zero is more transparent)']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:GL_RescaledMasked
    Name the output image:GL_OverlayOutlines
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:yellow
    Select objects to display:GL_Identify

Tile:[module_num:46|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notes:['TILE of the identified objects (GL)', '', 'Original picture Rescaled, Denoised picture, Identified objects, Groundtruth (Overlay with the original picture)', '']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
    Select an input image:GL_RescaleIntensity
    Name the output image:TILE_SegmGL
    Tile assembly method:Within cycles
    Final number of rows:1
    Final number of columns:12
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:No
    Automatically calculate number of rows?:Yes
    Automatically calculate number of columns?:Yes
    Select an additional image to tile:GL_ReducedNoise
    Select an additional image to tile:GL_objectsColor
    Select an additional image to tile:GL_OverlayObjects
    Select an additional image to tile:GL_OverlayOutlines

SaveImages:[module_num:47|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notes:['TILE of the identified objects (GL)', 'Save Image']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
    Select the type of image to save:Image
    Select the image to save:TILE_SegmGL
    Select method for constructing file names:From image filename
    Select image name for file prefix:GL_raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_TILE_SegmGL
    Saved file format:tiff
    Output file location:Default Output Folder|D:\\OLD DATASEAnalysisCellProfiler11032021\\Segm GOLGI
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

RescaleIntensity:[module_num:48|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notes:['SEGMENTING PEROXISOMES (PO) - RescaleIntensity', 'This module rescale every pixel so that the minimum has an intensity of zero and the maximum has an intensity of one.']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
    Select the input image:PO_raw
    Name the output image:PO_RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
MaskImage:[module_num:49|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notes:['SEGMENTING PEROXISOMES (PO)', '- MaskImage ', 'This module mask the channel of interest with the previously identified soma region, in order to focus the subcellular segmentation to only one cells/area.', '', '<select which mask to use: whole soma (SO_Identify) or cytoplasm (CY_Identify).', '']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
    Select the input image:PO_RescaleIntensity
    Name the output image:PO_RescaledMasked
    Use objects or an image as a mask?:Objects
    Select object for mask:CY_Mask
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    Invert the mask?:No

ReduceNoise:[module_num:50|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notes:['SEGMENTING PEROXISOMES (PO)  - Denoise', 'ReduceNoise performs non-local means noise reduction. Instead of only using a neighborhood of pixels around a central pixel for denoising, such as in GaussianFilter, multiple neighborhoods are pooled together. The neighborhood pool is determined by scanning the image for regions similar to the area around the central pixel using a correlation metric and a cutoff value.', '', '<<Distance:', '      <Set the distance by measuring the distance in between objects, including the low intensities pixels.', '<<Size:', '      <Set the size of the cancelling patches as the distance in between objects from the brightest pixel to the brightest pixel (usually is the double of the Distance or higher; increase the smooth).', '<<Cut-off distance (the permissiveness of the patches):', '       < Increasing the cut-off distance (more than 0.1) increases the smoothness of the image. Likewise, decreasing the cut-off distance decreases the smoothness of the image.']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
    Select the input image:PO_RescaledMasked
    Name the output image:PO_ReducedNoise
    Size:4
    Distance:2
    Cut-off distance:0.1

EnhanceOrSuppressFeatures:[module_num:51|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notes:['SEGMENTING PEROXISOMES (PO)', 'EnhanceOrSuppressFeatures enhances or suppresses certain image features (such as speckles, ring shapes, and neurites), which can improve subsequent identification of objects', '', '<<Feature size:', '<Diameter in pixel unit of the objects']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
    Select the input image:PO_ReducedNoise
    Name the output image:PO_Enhance
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:52|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notes:['SEGMENTING PEROXISOMES (PO)', '', '<<Typical diameter of objects:', '        <Diameter in pixel unit of the objects ', '<<Size of adaptive window:', '        <Length in pixel unit of the area within objects to threshold', '<<Lower and upper bonds on threshold', '        <Set the pixel unit (check the histogram intensity).', '<<Threshold correction factor ', '        <Set lower than 1 to have a more stringent thresholding along batches, higher than 1 to have it more relaxed. The correction factor helps when you have variability across different batches, it is almost like setting a standard deviation of your threshold.']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
    Select the input image:PO_Enhance
    Name the primary objects to be identified:PO_Identify
    Typical diameter of objects, in pixel units (Min,Max):2,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:2
    Suppress local maxima that are closer than this minimum allowed distance:4
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.05,1.0
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    Size of adaptive window:10
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    Thresholding method:Sauvola

ConvertObjectsToImage:[module_num:53|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notes:['SEGMENTING PEROXISOMES (PO)', 'This module transform your Identified objects PO into an Image (in Color), it is used for Tiling. ']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
    Select the input objects:PO_Identify
    Name the output image:PO_objectsColor
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:54|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notes:['SEGMENTING PEROXISOMES (PO) - Exporting Objects for further analysis in PART-3 of the pipeline.', 'This module convert the Identified objects in a image Uint16 (PO_objectsU16)']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
    Select the input objects:PO_Identify
    Name the output image:PO_objectsU16
    Select the color format:uint16
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
SaveImages:[module_num:55|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notes:['SEGMENTING PEROXISOMES (PO) - Exporting Objects for further analysisi in PART-3 of the pipeline.', 'Save image Uint16 ']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
    Select the type of image to save:Image
    Select the image to save:PO_objectsU16
    Select method for constructing file names:From image filename
    Select image name for file prefix:PO_raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_PO_objects
    Saved file format:tiff
    Output file location:Default Output Folder|D:\\GITHUB PIPELINE\\PO_UNIT16
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

OverlayObjects:[module_num:56|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notes:['SEGMENTING PEROXISOMES (PO) - Groundtruth - It is used to Check the segmentation and It will be used for Tiling', 'This module overlays the original picture of the organelle rescaled, with the previously Identified objects MT (from IdentifyPrimaryObjects)', '', '<you con modulate the opacity of the overlay (close to zero is more transparent)']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
    Input:PO_RescaleIntensity
    Name the output image:PO_OverlayObjects
    Objects:PO_Identify
    Opacity:0.4

OverlayOutlines:[module_num:57|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notes:['SEGMENTING PEROXISOMES (PO) - Groundtruth - It is used to Check the segmentation and It will be used for Tiling', 'This module overlays the original picture of the organelle rescaled, with the previously Identified objects MT (from IdentifyPrimaryObjects)', '', '<you con modulate the opacity of the overlay (close to zero is more transparent)']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:PO_RescaledMasked
    Name the output image:PO_OverlayOutlines
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#E75F03
    Select objects to display:PO_Identify

Tile:[module_num:58|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notes:['TILE of the identified objects (PO)', '', 'Original picture Rescaled, Denoised picture, Identified objects, Groundtruth (Overlay with the original picture)']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
    Select an input image:PO_RescaleIntensity
    Name the output image:TILE_SegmPO
    Tile assembly method:Within cycles
    Final number of rows:1
    Final number of columns:12
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:No
    Automatically calculate number of rows?:No
    Automatically calculate number of columns?:Yes
    Select an additional image to tile:PO_ReducedNoise
    Select an additional image to tile:PO_Enhance
    Select an additional image to tile:PO_objectsColor
    Select an additional image to tile:PO_OverlayObjects
    Select an additional image to tile:PO_OverlayOutlines

SaveImages:[module_num:59|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notes:['TILE of the identified objects (PO)', 'Save Image']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
    Select the type of image to save:Image
    Select the image to save:TILE_SegmPO
    Select method for constructing file names:From image filename
    Select image name for file prefix:PO_raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_TILE_SegmPO
    Saved file format:tiff
    Output file location:Default Output Folder|D:\\OLD DATASEAnalysisCellProfiler11032021\\Segm Peroxy
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

RescaleIntensity:[module_num:60|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notes:['SEGMENTING ENDOPLASMIC RETICULUM (ER) - RescaleIntensity', 'This module rescale every pixel so that the minimum has an intensity of zero and the maximum has an intensity of one.']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
    Select the input image:ER_raw
    Name the output image:ER_RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
MedianFilter:[module_num:61|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notes:['SEGMENTING ENDOPLASMIC RETICULUM (ER)  - Denoise', 'This module extract the original picture of nuclei and apply a filter to reduce salt-and-pepper noise in an image while preserving borders', '', '<Choose a small window (in pixel unit) if you have to reduce noise in small areas, if you choose a big window it will blurr the image.']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
    Select the input image:ER_RescaleIntensity
    Name the output image:ER_MedianFilter
    Window:4

ReduceNoise:[module_num:62|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notes:['SEGMENTING ENDOPLASMIC RETICULUM (ER)  - Denoise', 'ReduceNoise performs non-local means noise reduction. Instead of only using a neighborhood of pixels around a central pixel for denoising, such as in GaussianFilter, multiple neighborhoods are pooled together. The neighborhood pool is determined by scanning the image for regions similar to the area around the central pixel using a correlation metric and a cutoff value.']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
    Select the input image:ER_MedianFilter
    Name the output image:ER_ReduceNoise
    Size:5
    Distance:1
    Cut-off distance:0.1

MaskImage:[module_num:63|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
    Select the input image:ER_ReduceNoise
    Name the output image:ER_MaskReduceNoise
    Use objects or an image as a mask?:Objects
    Select object for mask:CY_Mask
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    Invert the mask?:No

EnhanceOrSuppressFeatures:[module_num:64|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notes:['SEGMENTING ENDOPLASMIC RETICULUM (ER)', 'EnhanceOrSuppressFeatures enhances or suppresses certain image features (such as speckles, ring shapes, and neurites), which can improve subsequent identification of objects', '', 'This module ehnance the tubular regions of the ER']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
    Select the input image:ER_ReduceNoise
    Name the output image:ER_EnhanceTube
    Select the operation:Enhance
    Feature size:10
    Feature type:Neurites
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    Smoothing scale:2
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    Enhancement method:Tubeness
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    Rescale result image:Yes

MaskImage:[module_num:65|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notes:['SEGMENTING ENDOPLASMIC RETICULUM (ER)', '- MaskImage ', 'This module mask the channel of interest with the previously identified soma region, in order to focus the subcellular segmentation to only one cells/area.', '', '<select which mask to use: whole soma (SO_Identify) or cytoplasm (CY_Identify).', '', '']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
    Select the input image:ER_EnhanceTube
    Name the output image:ER_RescaledMasked
    Use objects or an image as a mask?:Objects
    Select object for mask:CY_Mask
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:66|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notes:['SEGMENTING ENDOPLASMIC RETICULUM (ER) - TUBES ', '', '<<Typical diameter of objects:', '        <Diameter in pixel unit of the tubes objects (If you have big variation use the average).', '<<Lower and upper bonds on threshold', '        <Set the pixel unit (check the histogram intensity).', '<<Threshold correction factor" ', '        <Set lower than 1 to have a more stringent thresholding along batches, higher than 1 to have it more relaxed. The correction factor helps when you have variability across different batches, it is almost like setting a standard deviation of your threshold.']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
    Select the input image:ER_RescaledMasked
    Name the primary objects to be identified:ER_Identify_Tubes
    Typical diameter of objects, in pixel units (Min,Max):1,2
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Propagate
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:0.6
    Lower and upper bounds on threshold:0,1
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    Size of adaptive window:20
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    Thresholding method:Sauvola

IdentifyPrimaryObjects:[module_num:67|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notes:['SEGMENTING ENDOPLASMIC RETICULUM (ER) - SHEET', '', '<<Typical diameter of objects:', '        <Diameter in pixel unit of the sheet objects (If you have big variation use the average).', '<<Lower and upper bonds on threshold', '        <Set the pixel unit (check the histogram intensity).', '<<Threshold correction factor" ', '        <Set lower than 1 to have a more stringent thresholding along batches, higher than 1 to have it more relaxed. The correction factor helps when you have variability across different batches, it is almost like setting a standard deviation of your threshold.']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
    Select the input image:ER_MaskReduceNoise
    Name the primary objects to be identified:ER_Identify_Sheet
    Typical diameter of objects, in pixel units (Min,Max):1,10
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.18,0.25
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:10
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    Thresholding method:Otsu

CombineObjects:[module_num:68|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notes:['SEGMENTING ENDOPLASMIC RETICULUM (ER)', 'This module combine the previously Identifyed Tubular and Sheet ER objects (ER_IdentifyTubes and ER_IdentifySheet) into one set (ER_IdentifyComb)']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
    Select initial object set:ER_Identify_Tubes
    Select object set to combine:ER_Identify_Sheet
    Select how to handle overlapping objects:Merge
    Name the combined object set:ER_IdentifyComb

SplitOrMergeObjects:[module_num:69|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notes:['SEGMENTING ENDOPLASMIC RETICULUM (ER)', 'This module merge all the objects into one ER object (ER_Identify)', '', '<<Maximum distance within objects', '<Set in pixel unit the lenght of the range the objects needs to be merged']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
    Select the input objects:ER_IdentifyComb
    Name the new objects:ER_Identify
    Operation:Merge
    Maximum distance within which to merge objects:2000
    Merge using a grayscale image?:No
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    Merging method:Distance
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
ConvertObjectsToImage:[module_num:70|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notes:['SEGMENTING ENDOPLASMIC RETICULUM (ER)', 'This module transform your Identified objects ER into an Image (in Color), it is used for Tiling. ']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
    Select the input objects:ER_Identify
    Name the output image:ER_objectsColor
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:71|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notes:['SEGMENTING ENDOPLASMIC RETICULUM (ER) - Exporting Objects for further analysis in PART-3 of the pipeline.', 'This module convert the Identified and Combined objects in a image Uint16 (ER_objectsU16)']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
    Select the input objects:ER_Identify
    Name the output image:ER_objectsU16
    Select the color format:uint16
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
SaveImages:[module_num:72|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notes:['SEGMENTING ENDOPLASMIC RETICULUM (ER) - Exporting Objects for further analysisi in PART-3 of the pipeline.', 'Save image Uint16 ']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
    Select the type of image to save:Image
    Select the image to save:ER_objectsU16
    Select method for constructing file names:From image filename
    Select image name for file prefix:ER_raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_ER_objects
    Saved file format:tiff
    Output file location:Default Output Folder|D:\\GITHUB PIPELINE\\ER_UNIT16
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

OverlayObjects:[module_num:73|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notes:['SEGMENTING ENDOPLASMIC RETICULUM (ER) - Groundtruth - It is used to Check the segmentation and It will be used for Tiling', 'This module overlays the original picture of the organelle rescaled, with the previously Identified objects MT (from IdentifyPrimaryObjects)', '', '<you con modulate the opacity of the overlay (close to zero is more transparent)']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
    Input:ER_RescaleIntensity
    Name the output image:ER_OverlayObjects
    Objects:ER_Identify
    Opacity:0.4

OverlayOutlines:[module_num:74|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notes:['SEGMENTING ENDOPLASMIC RETICULUM (ER) - Groundtruth - It is used to Check the segmentation and It will be used for Tiling', 'This module overlays the original picture of the organelle rescaled, with the previously Identified objects MT (from IdentifyPrimaryObjects)', '', '<you con modulate the opacity of the overlay (close to zero is more transparent)']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ER_RescaleIntensity
    Name the output image:ER_OverlayOutlines
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:red
    Select objects to display:ER_Identify

Tile:[module_num:75|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notes:['TILE of the identified objects (ER)', '', 'Original picture Rescaled, Denoised pictures, Identified objects, Groundtruth (Overlay with the original picture)']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
    Select an input image:ER_RescaleIntensity
    Name the output image:TILE_SegmER
    Tile assembly method:Within cycles
    Final number of rows:8
    Final number of columns:12
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:No
    Automatically calculate number of rows?:Yes
    Automatically calculate number of columns?:Yes
    Select an additional image to tile:ER_MedianFilter
    Select an additional image to tile:ER_ReduceNoise
    Select an additional image to tile:ER_OverlayObjects
    Select an additional image to tile:ER_OverlayOutlines

SaveImages:[module_num:76|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notes:['TILE of the identified objects (ER)', 'Save Image']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
    Select the type of image to save:Image
    Select the image to save:TILE_SegmER
    Select method for constructing file names:From image filename
    Select image name for file prefix:ER_raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_TILE_SegmER
    Saved file format:tiff
    Output file location:Default Output Folder|D:\\OLD DATASEAnalysisCellProfiler11032021\\Segm ER
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

RescaleIntensity:[module_num:77|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notes:['SEGMENTING LIPID DROPLET (LD) - RescaleIntensity', 'This module rescale every pixel so that the minimum has an intensity of zero and the maximum has an intensity of one.']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
    Select the input image:LD_raw
    Name the output image:LD_RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
MedianFilter:[module_num:78|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notes:['SEGMENTING LIPID DROPLET (LD)  - Denoise', 'This module extract the original picture of nuclei and apply a filter to reduce salt-and-pepper noise in an image while preserving borders', '', '<Choose a small window (in pixel unit) if you have to reduce noise in small areas, if you choose a big window it will blurr the image.']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
    Select the input image:LD_RescaleIntensity
    Name the output image:LD_MedianFilter
    Window:2

MaskImage:[module_num:79|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notes:['SEGMENTING LIPID DROPLET (LD) - MaskImage ', 'This module mask the channel of interest with the previously identified soma region, in order to focus the subcellular segmentation to only one cells/area.', '', '<select which mask to use: whole soma (SO_Identify) or cytoplasm (CY_Identify).', '']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
    Select the input image:LD_MedianFilter
    Name the output image:LD_RescaledMasked
    Use objects or an image as a mask?:Objects
    Select object for mask:CY_Mask
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:80|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notes:['SEGMENTING LIPID DROPLET (LD)', '', '<<Typical diameter of objects:', '        <Diameter in pixel unit of the big objects (If you have big variation use the average).', '<<Lower and upper bonds on threshold', '        <Set the pixel unit (check the histogram intensity).', '<<Threshold correction factor" ', '        <Set lower than 1 to have a more stringent thresholding along batches, higher than 1 to have it more relaxed. The correction factor helps when you have variability across different batches, it is almost like setting a standard deviation of your threshold.']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
    Select the input image:LD_RescaledMasked
    Name the primary objects to be identified:LD_Identify
    Typical diameter of objects, in pixel units (Min,Max):2,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:2
    Suppress local maxima that are closer than this minimum allowed distance:3
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.5,1
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    Lower outlier fraction:0
    Upper outlier fraction:1
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2
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
ConvertObjectsToImage:[module_num:81|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notes:['SEGMENTING LIPID DROPLET (LD)', 'This module transform your Identified objects LD into an Image (in Color), it is used for Tiling. ']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
    Select the input objects:LD_Identify
    Name the output image:LD_objectsColor
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:82|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notes:['SEGMENTING LIPID DROPLET (LD) - Exporting Objects for further analysis in PART-3 of the pipeline.', 'This module convert the Identified and Combined objects in a image Uint16 (LD_objectsU16)']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
    Select the input objects:LD_Identify
    Name the output image:LD_objectsU16
    Select the color format:uint16
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
SaveImages:[module_num:83|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notes:['SEGMENTING LIPID DROPLET (LD)- Exporting Objects for further analysisi in PART-3 of the pipeline.', 'Save image Uint16 ']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
    Select the type of image to save:Image
    Select the image to save:LD_objectsU16
    Select method for constructing file names:From image filename
    Select image name for file prefix:LD_raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_LD_objects
    Saved file format:tiff
    Output file location:Default Output Folder|D:\\GITHUB PIPELINE\\LD_UNIT16
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

OverlayObjects:[module_num:84|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notes:['SEGMENTING LIPID DROPLET (LD)- Groundtruth - It is used to Check the segmentation and It will be used for Tiling', 'This module overlays the original picture of the organelle rescaled, with the previously Identified objects MT (from IdentifyPrimaryObjects)', '', '<you con modulate the opacity of the overlay (close to zero is more transparent)']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
    Input:LD_RescaleIntensity
    Name the output image:LD_OverlayObjects
    Objects:LD_Identify
    Opacity:0.4

OverlayOutlines:[module_num:85|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notes:['SEGMENTING LIPID DROPLET (LD)- Groundtruth - It is used to Check the segmentation and It will be used for Tiling', 'This module overlays the original picture of the organelle rescaled, with the previously Identified objects MT (from IdentifyPrimaryObjects)', '', '<you con modulate the opacity of the overlay (close to zero is more transparent)']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:LD_RescaledMasked
    Name the output image:LD_OverlayOutlines
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#FF0080
    Select objects to display:LD_Identify

Tile:[module_num:86|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notes:['TILE of the identified objects (LD)', '', 'Original picture Rescaled, Denoise picture, Identified objects, Groundtruth (Overlay with the original picture)', '']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
    Select an input image:LD_RescaleIntensity
    Name the output image:TILE_SegmLD
    Tile assembly method:Within cycles
    Final number of rows:1
    Final number of columns:12
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:No
    Automatically calculate number of rows?:Yes
    Automatically calculate number of columns?:Yes
    Select an additional image to tile:LD_MedianFilter
    Select an additional image to tile:LD_objectsColor
    Select an additional image to tile:LD_OverlayObjects
    Select an additional image to tile:LD_OverlayOutlines

SaveImages:[module_num:87|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notes:['TILE of the identified objects (LD)', 'Save Image']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
    Select the type of image to save:Image
    Select the image to save:TILE_SegmLD
    Select method for constructing file names:From image filename
    Select image name for file prefix:LD_raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_TILE_SegmLD
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

GrayToColor:[module_num:88|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notes:['COMPOSITE of the Original Image in Color. It is used for Tiling', 'This module generate a color image from grey pictures, by combining the different channels to which you can assign a color.']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
    Select a color scheme:Composite
    Rescale intensity:Yes
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    Name the output image:OrigImageColor
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    Hidden:7
    Image name:NU_RescaledMasked
    Color:#1C1CFF
    Weight:1.0
    Image name:LS_RescaledMasked
    Color:cyan
    Weight:1.0
    Image name:MT_RescaledMasked
    Color:green
    Weight:1.0
    Image name:GL_RescaledMasked
    Color:yellow
    Weight:1.0
    Image name:PO_RescaledMasked
    Color:#FF8000
    Weight:1.0
    Image name:ER_RescaledMasked
    Color:red
    Weight:1.0
    Image name:LD_RescaledMasked
    Color:#800080
    Weight:1.0

Tile:[module_num:89|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notes:['TILE of the ALL identified objects within a cell', '', 'Original picture Rescaled, Filtered picture, Identified objects, Groundtruth (Overlay with the original picture)']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
    Select an input image:OrigImageColor
    Name the output image:Tiled_SegmALLOrganelle
    Tile assembly method:Within cycles
    Final number of rows:8
    Final number of columns:12
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:No
    Automatically calculate number of rows?:Yes
    Automatically calculate number of columns?:Yes
    Select an additional image to tile:LS_OverlayOutlines
    Select an additional image to tile:MT_OverlayOutlines
    Select an additional image to tile:GL_OverlayOutlines
    Select an additional image to tile:PO_OverlayOutlines
    Select an additional image to tile:ER_OverlayOutlines
    Select an additional image to tile:LD_OverlayOutlines

SaveImages:[module_num:90|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notes:['TILE of the ALL identified objects within a cell', 'Save Image']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
    Select the type of image to save:Image
    Select the image to save:Tiled_SegmALLOrganelle
    Select method for constructing file names:From image filename
    Select image name for file prefix:NU_raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Tile_SegmALLorganelle
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
