CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:100
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['CellP-2D_v1wNU_PART-3of3_03202022-----------This pipeline is Only for 2D-Analysis with Nuclei ', '', '<Upload the following files:', '- Objects identified with Part1 (SO for Distribution)', '- Objects identified with Part2 (all the organelles for Contacts and Distribution)', '']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['This module allows you to extract information describing your images (i.e, metadata).', '', 'The Metdata section "Extract from file/folder names" is deputed for the images containing objects (CY, SO, NU)', '', '<<Extract from file/folder names:', '               <Edit the regular expression to extract metadata from your file names', '               <Submit', '<<Extract from image file headers:', '               <Extract metadata ', ' <Update']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Date>.*)_(?P<SampleName>.*)_BR(?P<BiolRepl>[0-9])_N(?P<NumbImage>[0-9]{1,2})_Unmixed-1_(?P<MaskType>.*)_
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    Extract metadata from:All images
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    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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notes:['This module allows you to assign a meaningful name to each image by which other modules will refer to it.', 'it is used to give name to:', '-objects files previously identified in Part1 and Part2 ', '', '<Update', '']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:10
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does MaskType "SO")
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    Name to assign these objects:SO
    Select the image type:Objects
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    Select the rule criteria:and (metadata does MaskType "SO")
    Name to assign these images:SomaGreyScale
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does MaskType "NU")
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    Name to assign these objects:NU
    Select the image type:Objects
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    Select the rule criteria:and (metadata does MaskType "CY")
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    Name to assign these objects:CY
    Select the image type:Objects
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    Select the rule criteria:and (metadata does MaskType "LS")
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    Name to assign these objects:LS
    Select the image type:Objects
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    Select the rule criteria:and (metadata does MaskType "MT")
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    Name to assign these objects:MT
    Select the image type:Objects
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    Select the rule criteria:and (metadata does MaskType "GL")
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    Name to assign these objects:GL
    Select the image type:Objects
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    Select the rule criteria:and (metadata does MaskType "PO")
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    Name to assign these objects:PO
    Select the image type:Objects
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    Select the rule criteria:and (metadata does MaskType "ER")
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    Name to assign these objects:ERpre
    Select the image type:Objects
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    Select the rule criteria:and (metadata does MaskType "LD")
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    Name to assign these objects:LD
    Select the image type:Objects
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
Groups:[module_num:4|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notes:['This module allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', 'Depending on the previous ,,Metadata module,, you can group your samples.', '', '<Group for SampleName, BiologicalReplicate and NumberImage. ', ' You can change the groups at your convenience, ', 'check the Image sets if it correspond to what expected.']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
    Do you want to group your images?:Yes
    grouping metadata count:3
    Metadata category:SampleName
    Metadata category:BiolRepl
    Metadata category:NumbImage

SplitOrMergeObjects:[module_num:5|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
    Select the input objects:ERpre
    Name the new objects:ER
    Operation:Merge
    Maximum distance within which to merge objects:2000
    Merge using a grayscale image?:No
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    Merging method:Distance
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
MeasureObjectNeighbors:[module_num:6|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notes:['']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
    Select objects to measure:LS
    Select neighboring objects to measure:MT
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:LS_MT_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:LS_MT_PercentContact
    Select colormap:Oranges

MeasureObjectNeighbors:[module_num:7|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
    Select objects to measure:LS
    Select neighboring objects to measure:GL
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:LS_GL_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:LS_GL_PercentContact
    Select colormap:Oranges

MeasureObjectNeighbors:[module_num:8|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
    Select objects to measure:LS
    Select neighboring objects to measure:PO
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:LS_PO_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:LS_PO_PercentContact
    Select colormap:Oranges

MeasureObjectNeighbors:[module_num:9|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
    Select objects to measure:LS
    Select neighboring objects to measure:ER
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:LS_ER_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:LS_ER_PercentContact
    Select colormap:Oranges

MeasureObjectNeighbors:[module_num:10|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
    Select objects to measure:LS
    Select neighboring objects to measure:LD
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:LS_LD_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:LS_LD_PercentContact
    Select colormap:Oranges

MeasureObjectNeighbors:[module_num:11|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
    Select objects to measure:MT
    Select neighboring objects to measure:LS
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:MT_LS_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:MT_LS_PercentContact
    Select colormap:Oranges

MeasureObjectNeighbors:[module_num:12|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
    Select objects to measure:MT
    Select neighboring objects to measure:GL
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:MT_GL_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:MT_GL_PercentContact
    Select colormap:Oranges

MeasureObjectNeighbors:[module_num:13|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
    Select objects to measure:MT
    Select neighboring objects to measure:PO
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:MT_PO_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:MT_PO_PercentContact
    Select colormap:Oranges

MeasureObjectNeighbors:[module_num:14|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
    Select objects to measure:MT
    Select neighboring objects to measure:ER
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:MT_ER_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:MT_ER_PercentContact
    Select colormap:Oranges

MeasureObjectNeighbors:[module_num:15|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
    Select objects to measure:MT
    Select neighboring objects to measure:LD
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:MT_LD_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:MT_LD_PercentContact
    Select colormap:Oranges

MeasureObjectNeighbors:[module_num:16|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
    Select objects to measure:GL
    Select neighboring objects to measure:LS
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:GL_LS_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:GL_LS_PercentContact
    Select colormap:Oranges

MeasureObjectNeighbors:[module_num:17|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
    Select objects to measure:GL
    Select neighboring objects to measure:MT
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:GL_MT_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:GL_MT_PercentContact
    Select colormap:Oranges

MeasureObjectNeighbors:[module_num:18|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
    Select objects to measure:GL
    Select neighboring objects to measure:PO
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:GL_PO_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:GL_PO_PercentContact
    Select colormap:Oranges

MeasureObjectNeighbors:[module_num:19|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
    Select objects to measure:GL
    Select neighboring objects to measure:ER
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:GL_ER_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:GL_ER_PercentContact
    Select colormap:Oranges

MeasureObjectNeighbors:[module_num:20|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
    Select objects to measure:GL
    Select neighboring objects to measure:LD
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:GL_LD_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:GL_LD_PercentContact
    Select colormap:Oranges

MeasureObjectNeighbors:[module_num:21|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
    Select objects to measure:PO
    Select neighboring objects to measure:LS
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:PO_LS_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:PO_LS_PercentContact
    Select colormap:Oranges

MeasureObjectNeighbors:[module_num:22|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
    Select objects to measure:PO
    Select neighboring objects to measure:MT
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:PO_MT_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:PO_MT_PercentContact
    Select colormap:Oranges

MeasureObjectNeighbors:[module_num:23|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
    Select objects to measure:PO
    Select neighboring objects to measure:GL
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:PO_GL_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:PO_GL_PercentContact
    Select colormap:Oranges

MeasureObjectNeighbors:[module_num:24|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
    Select objects to measure:PO
    Select neighboring objects to measure:ER
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:PO_ER_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:PO_ER_PercentContact
    Select colormap:Oranges

MeasureObjectNeighbors:[module_num:25|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
    Select objects to measure:PO
    Select neighboring objects to measure:LD
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:PO_LD_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:PO_LD_PercentContact
    Select colormap:Oranges

MeasureObjectNeighbors:[module_num:26|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
    Select objects to measure:ER
    Select neighboring objects to measure:LS
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:ER_LS_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:ER_LS_PercentContact
    Select colormap:Oranges

MeasureObjectNeighbors:[module_num:27|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
    Select objects to measure:ER
    Select neighboring objects to measure:MT
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:ER_MT_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:ER_MT_PercentContact
    Select colormap:Oranges

MeasureObjectNeighbors:[module_num:28|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
    Select objects to measure:ER
    Select neighboring objects to measure:GL
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:ER_GL_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:ER_GL_PercentContact
    Select colormap:Oranges

MeasureObjectNeighbors:[module_num:29|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
    Select objects to measure:ER
    Select neighboring objects to measure:PO
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:ER_PO_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:ER_PO_PercentContact
    Select colormap:Oranges

MeasureObjectNeighbors:[module_num:30|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
    Select objects to measure:ER
    Select neighboring objects to measure:LD
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:ER_LD_NeighborObjects
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:ER_LD_PercentContact
    Select colormap:Oranges

MaskObjects:[module_num:31|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
    Select objects to be masked:LS
    Name the masked objects:LS_MT
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:MT
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:32|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
    Select objects to be masked:LS
    Name the masked objects:LS_GL
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:GL
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:33|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
    Select objects to be masked:LS
    Name the masked objects:LS_PO
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:PO
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:34|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
    Select objects to be masked:LS
    Name the masked objects:LS_ER
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ER
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:35|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
    Select objects to be masked:LS
    Name the masked objects:LS_LD
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:LD
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:36|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
    Select objects to be masked:MT
    Name the masked objects:MT_GL
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:GL
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:37|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
    Select objects to be masked:MT
    Name the masked objects:MT_PO
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:PO
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:38|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
    Select objects to be masked:MT
    Name the masked objects:MT_ER
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ER
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:39|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
    Select objects to be masked:MT
    Name the masked objects:MT_LD
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:LD
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:40|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
    Select objects to be masked:GL
    Name the masked objects:GL_PO
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:PO
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:41|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
    Select objects to be masked:GL
    Name the masked objects:GL_ER
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ER
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:42|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
    Select objects to be masked:GL
    Name the masked objects:GL_LD
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:LD
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:43|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
    Select objects to be masked:PO
    Name the masked objects:PO_ER
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ER
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:44|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
    Select objects to be masked:PO
    Name the masked objects:PO_LD
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:LD
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:45|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
    Select objects to be masked:ER
    Name the masked objects:ER_LD
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:LD
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

ConvertObjectsToImage:[module_num:46|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
    Select the input objects:LS_MT
    Name the output image:LS_MT_Contacts
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:47|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
    Select the input objects:LS_MT
    Name the output image:LS_MT_conv
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:48|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
    Select the input objects:LS_GL
    Name the output image:LS_GL_Contacts
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:49|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
    Select the input objects:LS_GL
    Name the output image:LS_GL_conv
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:50|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
    Select the input objects:LS_PO
    Name the output image:LS_PO_Contacts
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:51|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
    Select the input objects:LS_PO
    Name the output image:LS_PO_conv
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:52|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
    Select the input objects:LS_ER
    Name the output image:LS_ER_Contacts
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:53|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
    Select the input objects:LS_ER
    Name the output image:LS_ER_conv
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:54|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
    Select the input objects:MT_GL
    Name the output image:MT_GL_Contacts
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:55|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
    Select the input objects:MT_GL
    Name the output image:MT_GL_conv
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:56|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
    Select the input objects:MT_PO
    Name the output image:MT_PO_Contacts
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:57|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
    Select the input objects:MT_PO
    Name the output image:MT_PO_conv
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:58|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
    Select the input objects:MT_ER
    Name the output image:MT_ER_Contacts
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:59|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
    Select the input objects:MT_ER
    Name the output image:MT_ER_conv
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:60|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
    Select the input objects:GL_PO
    Name the output image:GL_PO_Contacts
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:61|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
    Select the input objects:GL_PO
    Name the output image:GL_PO_conv
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:62|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
    Select the input objects:GL_ER
    Name the output image:GL_ER_Contacts
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:63|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
    Select the input objects:GL_ER
    Name the output image:GL_ER_conv
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:64|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
    Select the input objects:PO_ER
    Name the output image:PO_ER_Contacts
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:65|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
    Select the input objects:PO_ER
    Name the output image:PO_ER_conv
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:66|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
    Select the input objects:LS_LD
    Name the output image:LS_LD_conv
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:67|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
    Select the input objects:MT_LD
    Name the output image:MT_LD_conv
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:68|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
    Select the input objects:PO_LD
    Name the output image:PO_LD_conv
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:69|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
    Select the input objects:GL_LD
    Name the output image:GL_LD_conv
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:70|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
    Select the input objects:ER_LD
    Name the output image:ER_LD_conv
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:71|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
    Select the input objects:LS
    Name the output image:LS_objects
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:72|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
    Select the input objects:LS
    Name the output image:LS_conv
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:73|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
    Select the input objects:MT
    Name the output image:MT_objects
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:74|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
    Select the input objects:MT
    Name the output image:MT_conv
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:75|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
    Select the input objects:GL
    Name the output image:GL_objects
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:76|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
    Select the input objects:GL
    Name the output image:GL_conv
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:77|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
    Select the input objects:PO
    Name the output image:PO_objects
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:78|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
    Select the input objects:PO
    Name the output image:PO_conv
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:79|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
    Select the input objects:ER
    Name the output image:ER_objects
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:80|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
    Select the input objects:ER
    Name the output image:ER_conv
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:81|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
    Select the input objects:LD
    Name the output image:LD_conv
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:82|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
    Select the input objects:LD
    Name the output image:LD_objects
    Select the color format:Color
    Select the colormap:Default

MeasureObjectSizeShape:[module_num:83|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
    Select object sets to measure:ER, GL, LD, LS, MT, NU, PO, SO
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureImageAreaOccupied:[module_num:84|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
    Measure the area occupied by:Objects
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    Select object sets to measure:CY, ER_LD, GL_ER, GL_PO, LS_ER, LS_GL, LS_LD, LS_MT, LS_PO, MT_ER, MT_GL, MT_LD, MT_PO, NU, PO_ER, PO_LD, SO

MeasureObjectIntensityDistribution:[module_num:85|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notes:['DISTRIBUTION ORGANELLES', '', '<<Select images to measure:', '     <Select the previously identified objects (from Part1) and converted into binary image (in Part3)', '<<Number of bins:', '     <Set the number of bins higher of lower, correspondingly']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
    Select images to measure:ER_conv, GL_conv, LD_conv, LS_conv, MT_conv, PO_conv
    Hidden:1
    Hidden:1
    Hidden:6
    Calculate intensity Zernikes?:Magnitudes and phase
    Maximum zernike moment:9
    Select objects to measure:SO
    Object to use as center?:Edges of other objects
    Select objects to use as centers:NU
    Scale the bins?:Yes
    Number of bins:9
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    Image:LS_conv
    Objects to display:Do not use
    Number of bins:10
    Measurement:Fraction at Distance
    Color map:RdYlGn
    Save display as image?:Yes
    Output image name:LS_Distribution
    Image:MT_conv
    Objects to display:Do not use
    Number of bins:10
    Measurement:Fraction at Distance
    Color map:RdYlGn
    Save display as image?:Yes
    Output image name:MT_Distribution
    Image:GL_conv
    Objects to display:Do not use
    Number of bins:10
    Measurement:Fraction at Distance
    Color map:RdYlGn
    Save display as image?:Yes
    Output image name:GL_Distribution
    Image:PO_conv
    Objects to display:Do not use
    Number of bins:10
    Measurement:Fraction at Distance
    Color map:RdYlGn
    Save display as image?:Yes
    Output image name:PO_Distribution
    Image:ER_conv
    Objects to display:Do not use
    Number of bins:10
    Measurement:Fraction at Distance
    Color map:RdYlGn
    Save display as image?:Yes
    Output image name:ER_Distribution
    Image:LD_conv
    Objects to display:Do not use
    Number of bins:9
    Measurement:Fraction at Distance
    Color map:RdYlGn
    Save display as image?:Yes
    Output image name:LD_Distribution

MeasureObjectIntensityDistribution:[module_num:86|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notes:['DISTRIBUTION ORGANELLE CONTACTS', '', '<<Select images to measure:', '     <Select the previously identified objects (from Part1) and converted into binary image (in Part3)', '<<Number of bins:', '     <Set the number of bins higher of lower, correspondingly']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
    Select images to measure:GL_ER_conv, GL_PO_conv, LS_ER_conv, LS_GL_conv, LS_MT_conv, LS_PO_conv, MT_ER_conv, MT_GL_conv, MT_PO_conv, PO_ER_conv
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes and phase
    Maximum zernike moment:9
    Select objects to measure:SO
    Object to use as center?:Edges of other objects
    Select objects to use as centers:NU
    Scale the bins?:Yes
    Number of bins:9
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
Tile:[module_num:87|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
    Select an input image:LS_Distribution
    Name the output image:_Tile_OrganellexCell_
    Tile assembly method:Within cycles
    Final number of rows:1
    Final number of columns:12
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:No
    Automatically calculate number of rows?:No
    Automatically calculate number of columns?:Yes
    Select an additional image to tile:MT_Distribution
    Select an additional image to tile:GL_Distribution
    Select an additional image to tile:PO_Distribution
    Select an additional image to tile:ER_Distribution
    Select an additional image to tile:LD_Distribution

Tile:[module_num:88|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
    Select an input image:LS_conv
    Name the output image:_Tile_LS_Contacts
    Tile assembly method:Within cycles
    Final number of rows:8
    Final number of columns:12
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:No
    Automatically calculate number of rows?:Yes
    Automatically calculate number of columns?:Yes
    Select an additional image to tile:LS_MT_Contacts
    Select an additional image to tile:LS_GL_Contacts
    Select an additional image to tile:LS_PO_Contacts
    Select an additional image to tile:LS_ER_Contacts

Tile:[module_num:89|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
    Select an input image:MT_conv
    Name the output image:_Tile_MT_Contacts
    Tile assembly method:Within cycles
    Final number of rows:8
    Final number of columns:12
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:No
    Automatically calculate number of rows?:Yes
    Automatically calculate number of columns?:Yes
    Select an additional image to tile:LS_MT_Contacts
    Select an additional image to tile:MT_GL_Contacts
    Select an additional image to tile:MT_PO_Contacts
    Select an additional image to tile:MT_ER_Contacts

Tile:[module_num:90|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
    Select an input image:GL_conv
    Name the output image:_Tile_GL_Contacts
    Tile assembly method:Within cycles
    Final number of rows:8
    Final number of columns:12
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:No
    Automatically calculate number of rows?:Yes
    Automatically calculate number of columns?:Yes
    Select an additional image to tile:LS_GL_Contacts
    Select an additional image to tile:MT_GL_Contacts
    Select an additional image to tile:GL_PO_Contacts
    Select an additional image to tile:GL_ER_Contacts

Tile:[module_num:91|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
    Select an input image:PO_conv
    Name the output image:_Tile_PO_Contacts
    Tile assembly method:Within cycles
    Final number of rows:8
    Final number of columns:12
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:No
    Automatically calculate number of rows?:Yes
    Automatically calculate number of columns?:Yes
    Select an additional image to tile:LS_PO_Contacts
    Select an additional image to tile:MT_PO_Contacts
    Select an additional image to tile:GL_PO_Contacts
    Select an additional image to tile:PO_ER_Contacts

Tile:[module_num:92|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
    Select an input image:ER_conv
    Name the output image:_Tile_ER_Contacts
    Tile assembly method:Within cycles
    Final number of rows:8
    Final number of columns:12
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:No
    Automatically calculate number of rows?:Yes
    Automatically calculate number of columns?:Yes
    Select an additional image to tile:LS_ER_Contacts
    Select an additional image to tile:MT_ER_Contacts
    Select an additional image to tile:GL_ER_Contacts
    Select an additional image to tile:PO_ER_Contacts

SaveImages:[module_num:93|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
    Select the type of image to save:Image
    Select the image to save:_Tile_OrganellexCell_
    Select method for constructing file names:From image filename
    Select image name for file prefix:SomaGreyScale
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Tile_OrganelleDistributionCell_
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:94|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
    Select the type of image to save:Image
    Select the image to save:_Tile_LS_Contacts
    Select method for constructing file names:From image filename
    Select image name for file prefix:SomaGreyScale
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Tile_LS_Contacts_
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:95|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
    Select the type of image to save:Image
    Select the image to save:_Tile_MT_Contacts
    Select method for constructing file names:From image filename
    Select image name for file prefix:SomaGreyScale
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Tile_MT_Contacts
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:96|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
    Select the type of image to save:Image
    Select the image to save:_Tile_GL_Contacts
    Select method for constructing file names:From image filename
    Select image name for file prefix:SomaGreyScale
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Tile_GL_Contacts_
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:97|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
    Select the type of image to save:Image
    Select the image to save:_Tile_PO_Contacts
    Select method for constructing file names:From image filename
    Select image name for file prefix:SomaGreyScale
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Tile_PO_Contacts_
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:98|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
    Select the type of image to save:Image
    Select the image to save:_Tile_ER_Contacts
    Select method for constructing file names:From image filename
    Select image name for file prefix:SomaGreyScale
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Tile_ER_Contacts_
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:99|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:ER|AreaShape_EulerNumber,ER|AreaShape_FormFactor,ER|AreaShape_MaxFeretDiameter,ER|AreaShape_BoundingBoxArea,ER|AreaShape_Orientation,ER|AreaShape_BoundingBoxMaximum_X,ER|AreaShape_BoundingBoxMaximum_Y,ER|AreaShape_BoundingBoxMinimum_Y,ER|AreaShape_BoundingBoxMinimum_X,ER|AreaShape_Area,ER|AreaShape_MedianRadius,ER|AreaShape_Center_X,ER|AreaShape_Center_Y,ER|AreaShape_MeanRadius,ER|AreaShape_MajorAxisLength,ER|AreaShape_Perimeter,ER|AreaShape_MinFeretDiameter,ER|AreaShape_EquivalentDiameter,ER|AreaShape_Solidity,ER|AreaShape_Extent,ER|AreaShape_Compactness,ER|AreaShape_ConvexArea,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MCZ_ApoEmutanthiPSCs_CellP2Dv1wNUobj03202022_
    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Experiment
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:ER
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:GL
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:LS
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:MT
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:PO
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:SO
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:LD
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

ExportToSpreadsheet:[module_num:100|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:MT_PO|Location_Center_Y,MT_PO|Location_Center_X,MT_PO|Parent_MT,MT_PO|Number_Object_Number,SO|RadialDistribution_ZernikePhase_MT_GL_conv_9_3,SO|RadialDistribution_ZernikePhase_MT_GL_conv_9_1,SO|RadialDistribution_ZernikePhase_MT_GL_conv_9_5,SO|RadialDistribution_ZernikePhase_MT_GL_conv_9_7,SO|RadialDistribution_ZernikePhase_MT_GL_conv_9_9,SO|RadialDistribution_ZernikePhase_MT_GL_conv_6_0,SO|RadialDistribution_ZernikePhase_MT_GL_conv_6_4,SO|RadialDistribution_ZernikePhase_MT_GL_conv_6_2,SO|RadialDistribution_ZernikePhase_MT_GL_conv_6_6,SO|RadialDistribution_ZernikePhase_MT_GL_conv_3_1,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MCZ_hiPSCs_CellP2D_05192022_
    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:SO
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:CY
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:LS
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:MT
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:GL
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:PO
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:ER
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:LD
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
